PsychoPy2experiment version="2021.2.0"
Settings
  Experiment info = {'participant': 'XXX'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  color = white
  expName = Checkerboard
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Routines
  Routine trial
    ImageComponent Checkerboard
      image = stimuli\checkerboard.bmp
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.6
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    ImageComponent Checkerboard2
      image = stimuli\checkerboard2.bmp
      startVal [time (s)] = 0.6
      stopVal [duration (s)] = 0.6
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  Routine Rest
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = +
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  Routine Wait_Begin
    TextComponent text_2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Please check the LSL connection in NIRStar or Aurora

        Press 'space' to start
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fNIRS_trigger
    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        d.activate_line(lines=[1])
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine EEG_trigger
    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        outlet.push_sample(x=[2])
  Routine Load_TTL
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        import pyxid2
        import time
        devices = pyxid2.get_xid_devices()
        assert len(devices) > 0
        d = devices[0]
        d.init_device()
        d.set_pulse_duration(1000)
  Routine start
    SoundComponent sound_1
      sound = Audio\Start.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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Flow
  Routine Load_TTL
  Routine Wait_Begin
  LoopInitiator Experiment loopType="TrialHandler"
    loopType = random
    nReps = 10
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    Routine Rest
    Routine fNIRS_trigger
    Routine start
    LoopInitiator block loopType="TrialHandler"
      loopType = random
      nReps = 10
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      Routine trial
    LoopTerminator block
  LoopTerminator Experiment
  Routine Rest
