PsychoPy2experiment version="2021.2.0"
Settings
  Experiment info = {'participant': 'XXX'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = Fingertapping
  keyboardBackend = ioHub
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Routines
  Routine Start_Trial
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $textdur
      text [set every repeat] = $textstim
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    SoundComponent sound_1
      sound [set every repeat] = $sound
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      syncScreenRefresh = False
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    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        d.activate_line(lines=[1])
  Routine Stop_Trial
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = Stop
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    SoundComponent sound_2
      sound = Audio\\Stop.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        d.activate_line(lines=[2])
  Routine Countdown
    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Countdown will begin
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    SoundComponent sound_3
      sound = Audio\\Counter
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 3.5
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    TextComponent text_6
      letterHeight = 0.1
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      text = One
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    TextComponent text_7
      letterHeight = 0.1
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 1.0
      text = Two
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    TextComponent text_8
      letterHeight = 0.1
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 1.0
      text = Three
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        import pyxid2
        import time
        devices = pyxid2.get_xid_devices()
        assert len(devices) > 0
        d = devices[0]
        d.init_device()
        d.set_pulse_duration(1000)
  Routine Wait_Begin
    TextComponent text_9
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Test LSL Connection in Aurora before continuing

        Make sure subject is ready

        Press 'space' to continue
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        from pylsl import StreamInfo, StreamOutlet # import required classes
        info = StreamInfo(name='Trigger', type='Markers', channel_count=1, channel_format='int32', source_id='Example') # sets variables for object info
        outlet = StreamOutlet(info) # initialize stream.
  Routine Baseline
    TextComponent Baseline_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        We will now begin a 30 second baseline.

        Please remain as still as possible.
    TextComponent text_10
      letterHeight = 0.1
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 20.0
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Flow
  Routine Wait_Begin
  Routine Countdown
  Routine Baseline
  LoopInitiator trials loopType="TrialHandler"
    conditions = [{'condition': 'right', 'textstim': 'right', 'textdur': 1, 'sound': 'Audio\\\\right.wav', 'recoverydur': 1, 'stopsound': 'Audio\\\\Stop.wav', 'marker': 1}]
    conditionsFile = Psychopy_TrialTypes.xlsx
    loopType = sequential
    nReps = 10
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    Routine Start_Trial
    Routine Stop_Trial
  LoopTerminator trials
